PsychoPy2experiment version="2022.2.5"
Settings
  Data filename = u'data/%s_%s_%s_%s_%s' % (expInfo['experiment'], expInfo['participant'],expInfo['session'], expName, expInfo['date'])
  Experiment info = {'experiment': '["classic", "odd one out"]', 'skip training': '["false", "true"]', 'participant': 'On', 'session': '1a'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 2
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  color = -0.3412, -0.3412, -0.3412
  expName = object_triplets
  keyboardBackend = ioHub
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Routines
  Routine Welcome
    TextComponent text_welcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $welcome_text
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    MouseComponent mouse_resp_welcome
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent responsepixx_no_save
      Code Type = Auto->JS
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      Begin Routine:
        buttonbox.start()
      Each Frame:
        resp = buttonbox.getKeys()
        if len(resp) > 0:
            last_resp = resp[-1]
            continueRoutine = False
      End Routine:
        buttonbox.stop()
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine initialize
    CodeComponent load_conditions
      Code Type = Py
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      Before Experiment:
        try:
            from psychopy_pixx.devices import ResponsePixx
            from pypixxlib.viewpixx import VIEWPixx
        except  ModuleNotFoundError:
            print("Pixx not found")
            class VIEWPixx:
                def setScanningBackLight(self, _):
                    pass

                def setVideoMode(self, _):
                    pass

                def updateRegisterCache(self):
                    pass


            class ResponsePixx:
                def __init__(self,pixxdevice, buttons=['red'], events=['down'], lights=True):
                    pass

                def start(self):
                    pass

                def stop(self):
                    pass

                def getKeys(self):
                    return []


        prefs.general['allowGUI'] = False
      Begin Experiment:
        par = expInfo['participant']
        ses = expInfo['session']
        kind = expInfo['experiment']
        load = 'conditions/triplets_3x18_session'+ses+'.csv'
        if kind == "odd one out":
            odd_one_out = 1
            classic = 0
            welcome_text = "Please indicate which of the three images is the odd one out\nby pushing the left, top or right button.\n\nPush any button to start a training session."
            buttons=['red', 'green', 'yellow']
        elif kind == "classic":
            odd_one_out = 0
            classic = 1
            welcome_text = "Please indicate which of the two lower images is more similar to the top one\nby pushing the left or right button.\n\nPush any button to start a training session."
            buttons=['red', 'green']

        training = expInfo['skip training']
        if training == "false":
            train = 1
        elif training == "true":
            train = 0

        trialList=data.importConditions(load)
        old_block = trialList[0]["block_number"]
        trial_progress = ""


        pixxdevice = VIEWPixx()
        pixxdevice.setScanningBackLight(False)
        pixxdevice.setVideoMode('C24')
        pixxdevice.updateRegisterCache()
        buttonbox = ResponsePixx(pixxdevice, buttons=buttons,
                                 events=['down'], lights=True)
    ResourceManagerComponent resources
      actionType = Start and Check
      checkAll = False
      forceEndRoutine = False
      resources = ['images/bee_01b.jpg', 'images/bee_10s.jpg', 'images/branch_09s.jpg', 'images/coin_12s.jpg', 'images/coin_14s.jpg', 'images/coin_additional.jpg', 'images/fam1_f1_v1_ver25.png', 'images/fam1_f1_v2_ver25.png', 'images/fam1_f4_v1_ver25.png', 'images/fam1_f4_v2_ver25.png', 'images/fam1_f6_v1_ver25.png', 'images/fam1_f6_v2_ver25.png', 'images/fam1_m5_v1_ver25.png', 'images/fam1_m5_v2_ver25.png', 'images/fam1_m7_v1_ver25.png', 'images/fam1_m7_v2_ver25.png', 'images/fam1_m8_v1_ver25.png', 'images/fam1_m8_v2_ver25.png', 'images/fam3_f1_v1_ver25.png', 'images/fam3_f1_v2_ver25.png', 'images/fam3_f2_v1_ver25.png', 'images/fam3_f2_v2_ver25.png', 'images/fam3_f7_v1_ver25.png', 'images/fam3_f7_v2_ver25.png', 'images/fam3_m1_v1_ver25.png', 'images/fam3_m1_v2_ver25.png', 'images/fam3_m3_v1_ver25.png', 'images/fam3_m3_v2_ver25.png', 'images/fam3_m4_v1_ver25.png', 'images/fam3_m4_v2_ver25.png', 'images/fam5_f4_v1_ver25.png', 'images/fam5_f4_v2_ver25.png', 'images/fam5_f6_v1_ver25.png', 'images/fam5_f6_v2_ver25.png', 'images/fam5_f10_v1_ver25.png', 'images/fam5_f10_v2_ver25.png', 'images/fam5_m1_v1_ver25.png', 'images/fam5_m1_v2_ver25.png', 'images/fam5_m3_v1_ver25.png', 'images/fam5_m3_v2_ver25.png', 'images/fam5_m6_v1_ver25.png', 'images/fam5_m6_v2_ver25.png', 'images/katydid_07.jpg', 'images/katydid_10.jpg', 'images/key_03s.jpg', 'images/key_07s.jpg', 'images/key_08s.jpg', 'images/key_14s.jpg', 'images/ladybug_02s.jpg', 'images/ladybug_07s.jpg', 'images/leaf_02s.jpg', 'images/leaf_06s.jpg', 'images/leaf_07s.jpg', 'images/letter_opener_01b.jpg', 'images/letter_opener_06s.jpg', 'images/letter_opener_10s.jpg', 'images/match_01b.jpg', 'images/match_04s.jpg', 'images/matchbox_01b.jpg', 'images/phyllium_05.jpg', 'images/phyllium_14.jpg', 'images/screwdriver_01s.jpg', 'images/screwdriver_03s.jpg', 'images/screwdriver_04s.jpg', 'images/screwdriver_12s.jpg', 'images/screwdriver_13s.jpg', 'images/stick_insect_01.jpg', 'images/stick_insect_09.jpg', 'images/tree_07s.jpg', 'images/tree_trunk_06s.jpg', 'images/wasp_03s.jpg', 'images/wasp_06s.jpg']
      startVal [time (s)] = 0
  Routine trial_ooo
    TextComponent progress_indicator_o
      letterHeight = 20
      pos = (800,-500)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $trial_progress
      units = pix
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    CodeComponent set_imgs_buttons_o
      Code Type = Auto->JS
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      Begin Routine:
        if is_left==1:
            position_im1 = (-400 ,-296)
            position_but1 = (-400, -296)
            position_im2 = (400, -296)
            position_but2 = (400, -296)
        else:
            position_im1 = (400, -296)
            position_but1 = (400, -296)
            position_im2 = (-400, -296)
            position_but2 = (-400, -296)

        mid = "images/"+middle
        im1 = "images/"+image1
        im2 = "images/"+image2
    ImageComponent middle_image_o
      image [set every repeat] = $mid
      pos = (0, 296)
      size = (400,400)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 10
      units = pix
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    ImageComponent image_1_o
      image [set every repeat] = $im1
      pos [set every repeat] = position_im1
      size = (400, 400)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = pix
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    ImageComponent image_2_o
      image [set every repeat] = $im2
      pos [set every repeat] = position_im2
      size = (400, 400)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = pix
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    ButtonComponent button_1_o
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      opacity = 0
      pos [set every repeat] = position_but1
      size = (400,400)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      text = 1
      units = pix
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    ButtonComponent button_2_o
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      opacity = 0
      pos [set every repeat] = position_but2
      size = (400,400)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      text = 2
      units = pix
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    ButtonComponent middle_button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      opacity = 0
      pos = (0, 346)
      size [set every repeat] = (400,400)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      text = middle
      units = pix
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    CodeComponent responsepixx_save_2
      Code Type = Auto->JS
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      Begin Routine:
        buttonbox.start()
      Each Frame:
        resp = buttonbox.getKeys()
        if len(resp) > 0:
            last_resp = resp[-1]
            continueRoutine = False
      End Routine:
        buttonbox.stop()
        if len(resp) > 0:
            currentLoop.addData('resp.key', last_resp['name'])  # replace trials by the routine's name
            currentLoop.addData('resp.rt', last_resp['time'])
    KeyboardComponent key_resp_trial_ooo
      allowedKeys = 'left','right','up'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine blank_300
    PolygonComponent fixation_cross_2
      fillColor = white
      shape = cross
      size = (20, 20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      units = pix
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    TextComponent progress_indcator_fix
      letterHeight = 20
      pos = (800,-500)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $trial_progress
      units = pix
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  Routine trial_classic
    TextComponent progress_indicator_trial_c
      letterHeight = 20
      pos = (800,-500)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $trial_progress
      units = pix
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    CodeComponent set_imgs_buttons_c
      Code Type = Auto->JS
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      Begin Routine:
        if is_left==1:
            position_im1 = (-400 ,-296)
            position_but1 = (-400, -296)
            position_im2 = (400, -296)
            position_but2 = (400, -296)
        else:
            position_im1 = (400, -296)
            position_but1 = (400, -296)
            position_im2 = (-400, -296)
            position_but2 = (-400, -296)

        mid = "images/"+middle
        im1 = "images/"+image1
        im2 = "images/"+image2
    ImageComponent middle_image_c
      image [set every repeat] = $mid
      pos = (0, 296)
      size = (400,400)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 10
      units = pix
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    ImageComponent image_1_c
      image [set every repeat] = $im1
      pos [set every repeat] = position_im1
      size = (400, 400)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = pix
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    ImageComponent image_2_c
      image [set every repeat] = $im2
      pos [set every repeat] = position_im2
      size = (400, 400)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = pix
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    ButtonComponent button_1_c
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      opacity = 0
      pos [set every repeat] = position_but1
      size = (400,400)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      text = 1
      units = pix
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    ButtonComponent button_2_c
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      opacity = 0
      pos [set every repeat] = position_but2
      size = (400,400)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      text = 2
      units = pix
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    CodeComponent responsepixx_save
      Code Type = Auto->JS
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      Begin Routine:
        buttonbox.start()
      Each Frame:
        resp = buttonbox.getKeys()
        if len(resp) > 0:
            last_resp = resp[-1]
            continueRoutine = False
      End Routine:
        buttonbox.stop()
        if len(resp) > 0:
            currentLoop.addData('resp.key', last_resp['name'])  # replace trials by the routine's name
            currentLoop.addData('resp.rt', last_resp['time'])
    KeyboardComponent key_resp_trial_classic
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine trial_break
    TextComponent break_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Take a break.
        Push a button to continue.
    MouseComponent break_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent progress_indicator_break
      letterHeight = 20
      pos = (0,-500)
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_progress
      units = pix
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    CodeComponent responsepixx_no_save_3
      Code Type = Auto->JS
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      Begin Routine:
        buttonbox.start()
      Each Frame:
        resp = buttonbox.getKeys()
        if len(resp) > 0:
            last_resp = resp[-1]
            continueRoutine = False
      End Routine:
        buttonbox.stop()
    CodeComponent save_data
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.saveAsWideText(filename+'.csv', delim='auto')
        thisExp.saveAsPickle(filename)
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end_training
    TextComponent end_training_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is the end of the training.
        Push a button to start the experiment.
    MouseComponent end_training_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent responsepixx_no_save_2
      Code Type = Auto->JS
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      Begin Routine:
        buttonbox.start()
      Each Frame:
        resp = buttonbox.getKeys()
        if len(resp) > 0:
            last_resp = resp[-1]
            continueRoutine = False
      End Routine:
        buttonbox.stop()
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine check_block
    CodeComponent check_block_code_classic
      Code Type = Auto->JS
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      Begin Routine:
        if block_number != old_block:
            do_break = 1
            old_block = block_number
        else:
            do_break = 0
  Routine progress_ind_classic
    CodeComponent progress_indictor_code_c
      Code Type = Py
      Begin Routine:
        n_trial = classic_trials.thisTrialN
        next_trials = classic_trials.trialList[n_trial+1:]
        this_trial = classic_trials.trialList[n_trial]
        n_rem = 1

        for i in next_trials:
            if i["block_number"] == this_trial["block_number"]:
                n_rem += 1
            else:
                break

        n_total = classic_trials.nTotal
        blocks = classic_trials.trialList[n_total-1]["block_number"]

        trial_progress = "Trials to next break: " + str(n_rem)
        block_progress = "Block " + str(old_block+1) + " of " +str(blocks)
  Routine progress_ind_ooo
    CodeComponent progress_indictor_code_o
      Code Type = Py
      Begin Routine:
        n_trial = ooo_trials.thisTrialN
        next_trials = ooo_trials.trialList[n_trial+1:]
        this_trial = ooo_trials.trialList[n_trial]
        n_rem = 1

        for i in next_trials:
            if i["block_number"] == this_trial["block_number"]:
                n_rem += 1
            else:
                break

        n_total = ooo_trials.nTotal
        blocks = ooo_trials.trialList[n_total-1]["block_number"]

        trial_progress = "Trials to next break: " + str(n_rem)
        block_progress = "Block " + str(old_block+1) + " of " +str(blocks)
Flow
  Routine initialize
  Routine Welcome
  LoopInitiator do_classic_trials loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = classic
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    LoopInitiator test_trials_classic loopType="TrialHandler"
      conditionsFile = conditions/training.csv
      loopType = sequential
      nReps = train
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      conditions:
        [OrderedDict([('triplet_index', 1770), ('image1', 'key_08s.jpg'), ('middle', 'letter_opener_01b.jpg'), ('image2', 'screwdriver_13s.jpg'), ('image1_index', 5), ('middle_index', 7), ('image2_index', 17), ('image_set', 'action'), ('block_number', 0), ('session_number', 0), ('is_left', 1)]),
        OrderedDict([('triplet_index', 2374), ('image1', 'fam5_m3_v1_ver25.png'), ('middle', 'fam1_m5_v1_ver25.png'), ('image2', 'fam3_f1_v1_ver25.png'), ('image1_index', 17), ('middle_index', 3), ('image2_index', 6), ('image_set', 'greebles'), ('block_number', 0), ('session_number', 0), ('is_left', 1)]),
        OrderedDict([('triplet_index', 1039), ('image1', 'wasp_03s.jpg'), ('middle', 'branch_09s.jpg'), ('image2', 'ladybug_07s.jpg'), ('image1_index', 16), ('middle_index', 2), ('image2_index', 6), ('image_set', 'taxonomic'), ('block_number', 0), ('session_number', 0), ('is_left', 1)]),
        OrderedDict([('triplet_index', 1982), ('image1', 'fam1_f4_v1_ver25.png'), ('middle', 'fam1_f1_v1_ver25.png'), ('image2', 'fam5_f10_v1_ver25.png'), ('image1_index', 2), ('middle_index', 0), ('image2_index', 12), ('image_set', 'greebles'), ('block_number', 0), ('session_number', 0), ('is_left', 1)]),
        OrderedDict([('triplet_index', 1433), ('image1', 'screwdriver_04s.jpg'), ('middle', 'coin_additional.jpg'), ('image2', 'matchbox_01b.jpg'), ('image1_index', 15), ('middle_index', 2), ('image2_index', 10), ('image_set', 'action'), ('block_number', 0), ('session_number', 0), ('is_left', 1)])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
      Routine trial_classic
      Routine blank_300
    LoopTerminator test_trials_classic
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = train
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      Routine end_training
    LoopTerminator trials
    LoopInitiator classic_trials loopType="TrialHandler"
      conditionsFile = $load
      loopType = sequential
      nReps = 1
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      Routine progress_ind_classic
      Routine check_block
      LoopInitiator do_break_classic loopType="TrialHandler"
        loopType = random
        nReps = do_break
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        Routine trial_break
      LoopTerminator do_break_classic
      Routine trial_classic
      Routine blank_300
    LoopTerminator classic_trials
  LoopTerminator do_classic_trials
  LoopInitiator do_ooo_trials loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = odd_one_out
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    LoopInitiator test_trials_ooo loopType="TrialHandler"
      conditionsFile = conditions/training.csv
      loopType = sequential
      nReps = train
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      Routine trial_ooo
      Routine blank_300
    LoopTerminator test_trials_ooo
    LoopInitiator trials_2 loopType="TrialHandler"
      loopType = random
      nReps = train
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      Routine end_training
    LoopTerminator trials_2
    LoopInitiator ooo_trials loopType="TrialHandler"
      conditionsFile = $load
      loopType = sequential
      nReps = 1
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      Routine progress_ind_ooo
      Routine check_block
      LoopInitiator do_break_ooo loopType="TrialHandler"
        loopType = random
        nReps = do_break
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        Routine trial_break
      LoopTerminator do_break_ooo
      Routine trial_ooo
      Routine blank_300
    LoopTerminator ooo_trials
  LoopTerminator do_ooo_trials
